<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Ramp Generator</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Mod">
              <Operand xsi:type="FloatProperty">
                <Value>20</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="FloatProperty">
                <Value>-10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>12</rx:Count>
                <rx:Skip>1</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:AnalogOutput">
          <onix1:DataType>S16</onix1:DataType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:AnalogInput">
          <onix1:BufferSize>100</onix1:BufferSize>
          <onix1:DataType>S16</onix1:DataType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>analog-clock_.raw</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>analog-data_.raw</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>