<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:DigitalInput">
          <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Buttons</Selector>
      </Expression>
      <Expression xsi:type="HasFlag">
        <Operand xsi:type="WorkflowProperty" TypeArguments="onix1:BreakoutButtonState">
          <Value>Triangle</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Headstage64ElectricalStimulatorTrigger">
          <onix1:DeviceName>Headstage64/Headstage64ElectricalStimulator</onix1:DeviceName>
          <onix1:Enable>true</onix1:Enable>
          <onix1:PowerEnable>true</onix1:PowerEnable>
          <onix1:TriggerDelay>0</onix1:TriggerDelay>
          <onix1:PhaseOneCurrent>100</onix1:PhaseOneCurrent>
          <onix1:InterPhaseCurrent>0</onix1:InterPhaseCurrent>
          <onix1:PhaseTwoCurrent>-100</onix1:PhaseTwoCurrent>
          <onix1:PhaseOneDuration>200</onix1:PhaseOneDuration>
          <onix1:InterPhaseInterval>0</onix1:InterPhaseInterval>
          <onix1:PhaseTwoDuration>200</onix1:PhaseTwoDuration>
          <onix1:InterPulseInterval>400</onix1:InterPulseInterval>
          <onix1:InterBurstInterval>0</onix1:InterBurstInterval>
          <onix1:BurstPulseCount>5</onix1:BurstPulseCount>
          <onix1:TrainBurstCount>1</onix1:TrainBurstCount>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>