<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
          <onix1:Name>BreakoutBoard</onix1:Name>
          <onix1:Heartbeat>
            <onix1:DeviceName>BreakoutBoard/Heartbeat</onix1:DeviceName>
            <onix1:DeviceAddress>0</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:BeatsPerSecond>10</onix1:BeatsPerSecond>
          </onix1:Heartbeat>
          <onix1:AnalogIO>
            <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
            <onix1:DeviceAddress>6</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:InputRange0>TenVolts</onix1:InputRange0>
            <onix1:InputRange1>TenVolts</onix1:InputRange1>
            <onix1:InputRange2>TenVolts</onix1:InputRange2>
            <onix1:InputRange3>TenVolts</onix1:InputRange3>
            <onix1:InputRange4>TenVolts</onix1:InputRange4>
            <onix1:InputRange5>TenVolts</onix1:InputRange5>
            <onix1:InputRange6>TenVolts</onix1:InputRange6>
            <onix1:InputRange7>TenVolts</onix1:InputRange7>
            <onix1:InputRange8>TenVolts</onix1:InputRange8>
            <onix1:InputRange9>TenVolts</onix1:InputRange9>
            <onix1:InputRange10>TenVolts</onix1:InputRange10>
            <onix1:InputRange11>TenVolts</onix1:InputRange11>
            <onix1:Direction0>Input</onix1:Direction0>
            <onix1:Direction1>Input</onix1:Direction1>
            <onix1:Direction2>Input</onix1:Direction2>
            <onix1:Direction3>Input</onix1:Direction3>
            <onix1:Direction4>Input</onix1:Direction4>
            <onix1:Direction5>Input</onix1:Direction5>
            <onix1:Direction6>Input</onix1:Direction6>
            <onix1:Direction7>Input</onix1:Direction7>
            <onix1:Direction8>Input</onix1:Direction8>
            <onix1:Direction9>Input</onix1:Direction9>
            <onix1:Direction10>Input</onix1:Direction10>
            <onix1:Direction11>Input</onix1:Direction11>
          </onix1:AnalogIO>
          <onix1:DigitalIO>
            <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
            <onix1:DeviceAddress>7</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
          </onix1:DigitalIO>
          <onix1:ClockOutput>
            <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
            <onix1:DeviceAddress>5</onix1:DeviceAddress>
            <onix1:ClockGate>false</onix1:ClockGate>
            <onix1:Frequency>1000000</onix1:Frequency>
            <onix1:DutyCycle>50</onix1:DutyCycle>
            <onix1:Delay>0</onix1:Delay>
          </onix1:ClockOutput>
          <onix1:HarpInput>
            <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
            <onix1:DeviceAddress>12</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:Source>Breakout</onix1:Source>
          </onix1:HarpInput>
          <onix1:MemoryMonitor>
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
            <onix1:DeviceAddress>10</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
          </onix1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureUclaMiniscopeV4">
          <onix1:Name>UclaMiniscopeV4</onix1:Name>
          <onix1:Camera>
            <onix1:DeviceName>UclaMiniscopeV4/UclaMiniscopeV4</onix1:DeviceName>
            <onix1:DeviceAddress>256</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:FrameRate>Fps30Hz</onix1:FrameRate>
            <onix1:SensorGain>High</onix1:SensorGain>
            <onix1:InterleaveLed>false</onix1:InterleaveLed>
            <onix1:LedBrightness>30</onix1:LedBrightness>
            <onix1:LiquidLensVoltage>24.4</onix1:LiquidLensVoltage>
          </onix1:Camera>
          <onix1:Bno055>
            <onix1:DeviceName>UclaMiniscopeV4/PolledBno055</onix1:DeviceName>
            <onix1:DeviceAddress>257</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:AxisMap>ZYX</onix1:AxisMap>
            <onix1:AxisSign>MirrorZ MirrorY MirrorX</onix1:AxisSign>
          </onix1:Bno055>
          <onix1:Port>PortA</onix1:Port>
          <onix1:PortVoltage xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>8192</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>start-time_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value.AcquisitionClockHz,Value.BlockReadSize,Value.BlockWriteSize</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PortStatus">
          <onix1:DeviceName>UclaMiniscopeV4/PortController</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>port-status_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Clock,Value.StatusCode,Value.SerdesLocked,Value.SerdesPass</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:UclaMiniscopeV4CameraData">
          <onix1:DeviceName>UclaMiniscopeV4/UclaMiniscopeV4</onix1:DeviceName>
          <onix1:DataType>U8</onix1:DataType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>ucla-miniscope-v4-video_.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>GREY</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>ucla-miniscope-v4-clock_.raw</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PolledBno055Data">
          <onix1:DeviceName>UclaMiniscopeV4/PolledBno055</onix1:DeviceName>
          <onix1:PolledRegisters>All</onix1:PolledRegisters>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>bno055_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Clock,EulerAngle,Quaternion,Acceleration,Gravity,Temperature</io:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="OpenEphys.Commutator:AutoCommutator.bonsai">
          <RotationAxis>
            <X>0</X>
            <Y>-1</Y>
            <Z>0</Z>
          </RotationAxis>
          <LedEnable>true</LedEnable>
          <PortName>COM4</PortName>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:MemoryMonitorData">
          <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>PercentUsed</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>