WorkflowBuilder(Version=2.8.1)
OpenEphys.Onix1.CreateContext(Driver=riffa, Index=0)
-> OpenEphys.Onix1.ConfigureNeuropixelsV2eBeta
  DeviceName=NeuropixelsV2eBetaHeadstage/NeuropixelsV2eBeta
  DeviceAddress=256
  Enable=true
  EnableLed=true
  ProbeConfigurationA
    Reference=External
    ChannelMap
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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  ProbeConfigurationB
    Reference=External
    ChannelMap
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
      NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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-> OpenEphys.Onix1.StartAcquisition(ReadSize=2048, WriteSize=2048)
